PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = testing1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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  Routine intro
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  Routine warning
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  Routine video
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  Routine quiz
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  Routine likert
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  Routine quizending
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  Routine end
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  Routine quizinstruction
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Flow
  Routine intro
  Routine warning
  Routine video
  Routine quizinstruction
  Routine quiz
  Routine quizending
  Routine likert
  Routine end
